<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="A" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   <Plugin Name="Connectivity">
   <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified globally for each cell  -->
   <!-- This constraint works in 2D and on square lattice only! It also requires that the <NeighborOrder> in the Potts section is 1 or 2! -->
   <!-- For more flexible version of this plugin use ConnectivityLocalFlex where constraint penalty is specified for each cell individually using Python scripting using the following syntax -->
   <!-- self.connectivityLocalFlexPlugin.setConnectivityStrength(cell,10000000) -->
   <Penalty>10000000</Penalty>
</Plugin>

   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="A">5.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="128" y="128" z="0"/>
         <Radius>64</Radius>
         <Gap>0</Gap>
         <Width>8</Width>
         <Types>A</Types>
      </Region>
   </Steppable>
</CompuCell3D>
